# ============================================================================
# microscope.cfg — Micro-Manager hardware configuration (example / template)
#
# Load this in Micro-Manager (File > Load Hardware Configuration), then start
# the pycromanager gateway (Tools > Options > "Run server on port 4827").
# monet's beam-path drivers connect to whatever MM has loaded — monet does NOT
# load a .cfg itself.
#
# WHY THIS FILE MATTERS FOR MONET
# -------------------------------
# monet finds Micro-Manager settings BY NAME. The names below are the contract:
#
#   * Config group  "Filter turret"  <- monet.beampath.NikonFilterWheel
#   * Config group  "Nosepiece"      <- monet.beampath.NikonNosepiece
#   * The Core "Shutter" role         <- monet.beampath.NikonShutter
#   * Preset names in "Filter turret" (Ti488setting / Ti561setting /
#     Ti640setting) MUST equal the `DC:` strings in protocols.yaml -> Voyager.
#     A mismatch makes monet raise "Position 'Ti488setting' not available ...".
#
# This template is built on the built-in DemoCamera devices so it LOADS AND
# RUNS with no real hardware — you can exercise the full monet<->MM path in
# simulation. To use a real Nikon Ti2, replace the DemoCamera `Device` lines
# with the Ti2 devices from the Hardware Configuration Wizard (see the
# commented block at the bottom) but KEEP the group / preset / role names.
# ============================================================================


# Reset
Property,Core,Initialize,0

# Devices
Device,COM7,SerialManager,COM7
Device,Ti2-E,NikonTi2,Ti2-E__0
Device,ZDrive,NikonTi2,ZDrive
Device,Nosepiece,NikonTi2,Nosepiece
Device,FilterTurret1,NikonTi2,FilterTurret1
Device,Turret1Shutter,NikonTi2,Turret1Shutter
Device,LightPath,NikonTi2,LightPath
Device,PFS,NikonTi2,PFS
Device,PFSOffset,NikonTi2,PFSOffset
Device,IntermediateMagnification,NikonTi2,IntermediateMagnification
Device,DHub,DemoCamera,DHub
Device,MicroscopeID,DemoCamera,DWheel
Device,MyMic_CAM,HamamatsuHam,HamamatsuHam_DCAM
Device,XYStage,ASIStage,XYStage

# Pre-init settings for devices
Property,COM7,AnswerTimeout,500.0000
Property,COM7,BaudRate,9600
Property,COM7,DTR,Disable
Property,COM7,DataBits,8
Property,COM7,DelayBetweenCharsMs,0.0000
Property,COM7,Fast USB to Serial,Disable
Property,COM7,Handshaking,Off
Property,COM7,Parity,None
Property,COM7,StopBits,1
Property,COM7,Verbose,1
Property,XYStage,Port,COM7

# Pre-init settings for COM ports

# Hub (parent) references
Parent,ZDrive,Ti2-E
Parent,Nosepiece,Ti2-E
Parent,FilterTurret1,Ti2-E
Parent,Turret1Shutter,Ti2-E
Parent,LightPath,Ti2-E
Parent,PFS,Ti2-E
Parent,PFSOffset,Ti2-E
Parent,IntermediateMagnification,Ti2-E
Parent,MicroscopeID,DHub

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,ZDrive,0
FocusDirection,PFSOffset,0

# Roles
Property,Core,Camera,MyMic_CAM
Property,Core,Shutter,Turret1Shutter
Property,Core,Focus,ZDrive
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# Nosepiece
Label,Nosepiece,5,6-
Label,Nosepiece,4,5-
Label,Nosepiece,3,4-
Label,Nosepiece,2,3-
Label,Nosepiece,1,2-PowerMeter
Label,Nosepiece,0,1-Apo TIRF 100x Oil
# FilterTurret1
Label,FilterTurret1,5,6-TIRF 405
Label,FilterTurret1,4,5-Empty
Label,FilterTurret1,3,4-Empty
Label,FilterTurret1,2,3-TIRF 640
Label,FilterTurret1,1,2-TIRF 560
Label,FilterTurret1,0,1-TIRF 488
# LightPath
Label,LightPath,3,4-L100
Label,LightPath,2,3-AUX
Label,LightPath,1,2-R100
Label,LightPath,0,1-EYE
# MicroscopeID
Label,MicroscopeID,9,State-9
Label,MicroscopeID,8,State-8
Label,MicroscopeID,7,State-7
Label,MicroscopeID,6,State-6
Label,MicroscopeID,5,State-5
Label,MicroscopeID,4,State-4
Label,MicroscopeID,3,State-3
Label,MicroscopeID,2,State-2
Label,MicroscopeID,1,State-1
Label,MicroscopeID,0,MyMic

# Configuration presets
# Group: Filter
# Preset: 1-TIRF 488
ConfigGroup,Filter,1-TIRF 488,FilterTurret1,Label,1-TIRF 488

# Preset: 6-TIRF 405
ConfigGroup,Filter,6-TIRF 405,FilterTurret1,Label,6-TIRF 405

# Preset: 2-TIRF 560
ConfigGroup,Filter,2-TIRF 560,FilterTurret1,Label,2-TIRF 560

# Preset: 3-TIRF 640
ConfigGroup,Filter,3-TIRF 640,FilterTurret1,Label,3-TIRF 640

# Preset: 4-Empty
ConfigGroup,Filter,4-Empty,FilterTurret1,Label,4-Empty

# Preset: 5-Empty
ConfigGroup,Filter,5-Empty,FilterTurret1,Label,5-Empty

# Group: Nosepiece
# Preset: 2-PowerMeter
ConfigGroup,Nosepiece,3-PowerMeter,Nosepiece,Label,2-PowerMeter

# Preset: 1-Apo TIRF 100x Oil
ConfigGroup,Nosepiece,2-Apo TIRF 100x Oil,Nosepiece,Label,2-Apo TIRF 100x Oil


# Group: System
# Preset: Startup
ConfigGroup,System,Startup,MyMic_CAM,Binning,2x2
ConfigGroup,System,Startup,MyMic_CAM,Bits per Channel,16
ConfigGroup,System,Startup,MyMic_CAM,Exposure,100.0400
ConfigGroup,System,Startup,MyMic_CAM,ScanMode,1
ConfigGroup,System,Startup,FilterTurret1,Label,2-TIRF 560


# Group: Sensitivity
# Preset: 12-bit
ConfigGroup,Sensitivity,12-bit,MyMic_CAM,Bits per Channel,12

# Preset: 16-bit
ConfigGroup,Sensitivity,16-bit,MyMic_CAM,Bits per Channel,16


# Group: ScanMode
# Preset: 1 (lowest noise - >= 100ms for quadrant)
ConfigGroup,ScanMode,1 (lowest noise - >= 100ms for quadrant),MyMic_CAM,ScanMode,1

# Preset: 3 (medium noise - >= 10ms for quadrant)
ConfigGroup,ScanMode,3 (medium noise - >= 10ms for quadrant),MyMic_CAM,ScanMode,3

# Preset: 2 (low noise - >= 25ms for quadrant)
ConfigGroup,ScanMode,2 (low noise - >= 25ms for quadrant),MyMic_CAM,ScanMode,2



# PixelSize settings
# Resolution preset: Res0
ConfigPixelSize,Res0,Core,XYStage,XYStage
PixelSize_um,Res0,0.13
PixelSizeAffine,Res0,0.13,0.0,0.0,0.0,0.13,0.0

